PsychoPy2experiment version="3.0.7"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[-1,-1,-1]
  expName = Test
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Routines
  Routine Feedback
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        import random

        nGam = str(nGamble)
        gamAdv = str(gamAd)
        #convert to string

        GamblePercent = [20, 25, 30, 35, 40, 45, 50, 60, 65, 70, 75, 80, 85, 90, 95]
        randomGam = random.choice(GamblePercent)
        GamblePer = str(randomGam)
      Each Frame:
        import random

        #nGam = str(nGamble)

        GamblePercent = [20, 25, 30, 35, 40, 45, 50, 60, 65, 70, 75, 80, 85, 90, 95]
        randomGam = random.choice(GamblePercent)
        GamblePer = str(randomGam)
    TextComponent endText
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.06
      pos [set every repeat] = (-0.08, 0)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $text2 + " told you to gamble " + $gamAdv + " times. \n \n"


        "You gambled " + $nGam + " times. \n \n"


        "You won the gambles " + $GamblePer + "% of the time. \n \n"


        "Please press enter to move on to the next block of trials. \n"
    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
      End Routine:
        nGamble=0
        gamAd=0
  Routine trial
    ImageComponent ChoicePic
      image [set every repeat] = $Choice
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0)
      size [set every repeat] = (1.3, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine Choice2Gain
    TextComponent blank
      color [set every repeat] = $[-1.000,-1.000,-1.000]
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.01
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = I
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    ImageComponent ChoicePic2
      image [set every repeat] = $Choice2
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0)
      size [set every repeat] = (1.3, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent resp
      allowedKeys [set every repeat] = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent checkL1
      color [set every repeat] = $[1,1,1]
      image [set every repeat] = check2.png
      mask [set every repeat] = None
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0)
      size [set every repeat] = (2, 1)
      startVal [condition] = resp.keys == 'left'
      stopVal [duration (s)] = 1
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    ImageComponent checkR1
      color [set every repeat] = $[1,1,1]
      image [set every repeat] = check3.png
      mask [set every repeat] = None
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0)
      size [set every repeat] = (2, 1)
      startVal [condition] = resp.keys == 'right'
      stopVal [duration (s)] = 1
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    CodeComponent code_4
      Code Type = Py
      Begin Experiment:
        from PIL import Image
        from psychopy import visual, core
      Each Frame:
        checkL1.autoLog=False
        checkR1.autoLog=False


        if resp.keys == 'left':
            checkL1.autoDraw=True

        #elif resp.keys == 'right':
         #   checkR1.autoDraw=False

        if resp.keys == 'right':
            checkR1.autoDraw=True


        if blank.status == FINISHED:
            checkR1.autoDraw=False
            checkL1.autoDraw=False
            continueRoutine=False
            #win.flip()


            #elif resp.keys == 'left':
         #   checkL1.autoDraw=False

        #clock = core.Clock()
        #while clock.getTime() < 2.0:
        #    if 0.5 <= clock.getTime() < 1.0:
         #       if checkL1.autoDraw==True:
          #          checkL1.setPhase(0.1, '+')
           #     elif checkR1.autoDraw==True:
            #        checkR1.setPhase(0.1, '+')
            #win.flip()
      End Routine:
        checkL1.autoLog=False
        checkR1.autoLog=False



        if resp.keys == 'left':
            checkL1.autoDraw=True

        #elif resp.keys == 'right':
         #   checkR1.autoDraw=False

        if resp.keys =='right':
            checkR1.autoDraw=True


        if blank.status == FINISHED:
            checkR1.autoDraw=False
            checkL1.autoDraw=False
            #win.flip()
        #elif resp.keys == 'left':
         #   checkL1.autoDraw=False


        #clock = core.Clock()
        #while clock.getTime() < 2.0:
         #   if 0.5 <= clock.getTime() < 1.0:
          #      if checkL1.autoDraw==True:
           #         checkL1.setPhase (0.1, '+')
            #    elif checkR1.autoDraw==True:
             #       checkR1.setPhase(0.1, '+')
            #win.flip()
    CodeComponent GambleCount
      Code Type = Py
      Begin Experiment:
        nGamble=0
        gamFollow=0
      End Routine:
        #trials.addData('nGamble', nGamble)
        if resp.keys == 'right':
            nGamble += 1

        '''

        for thisTrial in trials:
            if sheet.cell_value(row, 5) == 'risk':
                gamAd+=1
        '''

        #if response.keys == 'y' and gamAdvice == '1':
        #    gamAd += 1

        #if response.keys == 'y':
        #    gamAd+=gamAdvice



        '''
        if GambleAdvice == '1' and resp.keys == 'right'
            gamFollow += 1


        print(gam)
        '''

        print(gamAd)
  Routine preBlock
    TextComponent chooseInst
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.04
      pos [set every repeat] = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = Please choose which person you would want to receive financial advice from, and then press enter.
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    TextComponent Ad1
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.04
      pos [set every repeat] = (-0.4, -0.05)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
          Advisor 1: (Left Arrow)








        Adelphi University MBA student,
        interning at Chase Bank
    TextComponent Ad2
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.04
      pos [set every repeat] = (0.4, -0.05)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Advisor 2: (Right arrow)








        Adelphi University
        undergraduate biology major
    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    ImageComponent Ad1pic
      image [set every repeat] = avatar_1.png
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (-.4, -0.06)
      size [set every repeat] = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent Ad2pic
      image = avatar_2.png
      pos = (.4, -0.06)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        border_right = visual.Circle(win,radius = 0.38, edges = 90,lineColor='green',lineColorSpace = 'rgb', fillColor = None, pos = (0.4, -0.09), opacity = 1, lineWidth = 5.0)
        border_left = visual.Circle(win,radius = 0.38, edges = 90,lineColor='green',lineColorSpace = 'rgb', fillColor = None, pos = (-0.4, -0.09), opacity = 1, lineWidth = 5.0)
      Each Frame:
        if key_resp_3.keys == 'left':
            border_left.autoDraw=True

        if key_resp_3.keys =='right':
            border_right.autoDraw=True

        if chooseInst.status == FINISHED:
            border_right.autoDraw = False
            border_left.autoDraw = False
      End Routine:
        if chooseInst.status == FINISHED:
            border_right.autoDraw = False
            border_left.autoDraw = False
    KeyboardComponent enter
      allowedKeys [set every repeat] = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent readDatasheet
      Code Type = Py
      Begin Routine:
        import pandas as pd

        cond = pd.read_excel('Book1.xlsx')
      End Routine:
        if key_resp_3.keys == 'left':
            text = 'Advisor 1 says:'
            text2 = 'Advisor 1'

        if key_resp_3.keys == 'right':
            text = 'Advisor 2 says:'
            text2 = 'Advisor 2'
  Routine askAd
    TextComponent yesNo
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.09
      pos [set every repeat] = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [condition] = Advice.status==STARTED
      text [set every repeat] = Y                 N
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    TextComponent ask
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.05
      pos [set every repeat] = (0, 0.11)
      startVal [time (s)] = 0.0
      stopVal [condition] = Advice.status==STARTED
      text [set every repeat] = Would you like to hear advice from your financial advisor?
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    KeyboardComponent response
      allowedKeys = 'y','n'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    CodeComponent conditionalAdvice
      Code Type = Py
      Begin Experiment:
        gamAd=0
      Each Frame:
        if response.keys == 'y':
            continueRoutine = True
        if response.keys == 'n':
            continueRoutine = False
      End Routine:
        if response.keys == 'y':
            continueRoutine = True
        if response.keys == 'n':
            continueRoutine = False
    TextComponent Advice
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.08
      pos [set every repeat] = (0, 0)
      startVal [condition] = response.keys=='y'
      stopVal [duration (s)] = 3
      text [set every repeat] = $text + $AdviceVar1
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    TextComponent adviceCode
      color [set every repeat] = $[-1.000,-1.000,-1.000]
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.1
      pos [set every repeat] = (0, 0)
      startVal [condition] = response.keys=='y'
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $GambleAdviceNum
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    CodeComponent adviceType
      Code Type = Py
      End Routine:
        gambleAdvice = int(GambleAdviceNum)


        if continueRoutine == True and gambleAdvice == 1:
            gamAd += 1
  Routine ISI
    TextComponent iSi
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine inst
    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        On the following page you will be instructed to choose an advisor.

        Press the space bar when you are ready to proceed.
    KeyboardComponent space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Receive_money
    ImageComponent receiveMoneyPicture
      image [set every repeat] = $Amount
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, -0.05)
      size [set every repeat] = (1.5, 1.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent ISI2
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.08
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text [set every repeat] = +
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  Routine Repeat20
    CodeComponent rep20
      Code Type = Py
      Begin Experiment:
        import numpy.random

        from numpy.random import choice

        import pandas as pd

        import xlrd

        book = xlrd.open_workbook('Book1.xlsx')
        sheet = book.sheet_by_index(0)




        #xl = pd.read_excel('Book1.xlsx')

        #converters={'GambleAdviceNum':int})

        #gamAdvice = xl['GambleAdviceType']

        #largeDict = xl.to_dict('records')

        #dict = pd.read_excel('Book1.xlsx', index_col=3).to_dict()
Flow
  Routine inst
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine preBlock
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $choice(32, size=20, replace=False)
      conditionsFile = Book1.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('Choice', 'Pictures\\IA50_G10.bmp'), ('Choice2', 'Pictures\\IA50_G10.bmp'), ('AdviceVar', 'Advisor 1 says:\n\n"Go with the safe option here!"'), ('Amount', 'Pictures\\IA50.bmp'), ('AdviceVar2', 'Advisor 2 says:\n\n"Try your luck and gamble!"'), ('AdviceVar1', '\n\n"Go with the safe option here!"'), ('GambleAdvice', 'safe'), ('GambleAdviceNum', 0)]),
        OrderedDict([('Choice', 'Pictures\\IA50_G20.bmp'), ('Choice2', 'Pictures\\IA50_G20.bmp'), ('AdviceVar', 'Advisor 1 says:\n\n"Let\'s venture and take a risk!"'), ('Amount', 'Pictures\\IA50.bmp'), ('AdviceVar2', 'Advisor 2 says:\n\n"Don\'t gamble for this one."'), ('AdviceVar1', '\n\n"Let\'s venture and take a risk!"'), ('GambleAdvice', 'risk'), ('GambleAdviceNum', 1)]),
        OrderedDict([('Choice', 'Pictures\\IA50_G30.bmp'), ('Choice2', 'Pictures\\IA50_G30.bmp'), ('AdviceVar', 'Advisor 1 says:\n\n"I think you should gamble."'), ('Amount', 'Pictures\\IA50.bmp'), ('AdviceVar2', 'Advisor 2 says:\n\n"Don\'t be tempted to gamble."'), ('AdviceVar1', '\n\n"I think you should gamble."'), ('GambleAdvice', 'risk'), ('GambleAdviceNum', 1)]),
        OrderedDict([('Choice', 'Pictures\\IA50_G40.bmp'), ('Choice2', 'Pictures\\IA50_G40.bmp'), ('AdviceVar', 'Advisor 1 says:\n\n"It would probably be best to play it safe."'), ('Amount', 'Pictures\\IA50.bmp'), ('AdviceVar2', 'Advisor 2 says:\n\n"What\'s life without a little risk?"'), ('AdviceVar1', '\n\n"It would probably be best to play it safe."'), ('GambleAdvice', 'safe'), ('GambleAdviceNum', 0)])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
      Routine Repeat20
      Routine ISI
      Routine Receive_money
      Routine trial
      Routine askAd
      Routine Choice2Gain
    LoopTerminator trials
    Routine Feedback
  LoopTerminator trials_2
