PsychoPy2experiment version="3.1.5"
Settings
  Experiment info = {'participant': '', 'session': '001', 'age': '', 'gender (0=male, 1 = female, 2 = other)': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[-1,-1,-1]
  expName = Test
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Routines
  Routine Feedback
    CodeComponent strVariables
      Code Type = Py
      Begin Routine:
        import random

        nGam = str(nGamble)
        print('nGam')
        gamAdvRisk = str(gamAdRisk)
        advFollow = str(adFollow)


        GamblePercent = [20, 25, 30, 35, 40, 45, 50, 60, 65, 70, 75, 80, 85, 90, 95]
        randomGam = random.choice(GamblePercent)
        if nGam=='0':
            GamblePer = '0'
        else:
            GamblePer = str(randomGam)
      Each Frame:
        #import random


        #GamblePercent = [20, 25, 30, 35, 40, 45, 50, 60, 65, 70, 75, 80, 85, 90, 95]
        #randomGam = random.choice(GamblePercent)
        #GamblePer = str(randomGam)
    TextComponent endText
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.05
      pos [set every repeat] = (-0.06, 0)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $text2 + " told you to gamble " + $gamAdvRisk + " times. \n \n"

        "You followed their advice to gamble " + $advFollow + " times. \n \n"


        "You gambled " + $nGam + " times. \n \n"


        "You won the gambles " + $GamblePer + "% of the time. \n \n"


        "Please press enter to move on to the next block of trials. \n"
    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent resetVariables
      Code Type = Py
      End Routine:
        nGamble=0
        gamAdRisk=0
        gamAdSafe=0
        adFollow=0
  Routine trial
    ImageComponent ChoicePic
      image [set every repeat] = $Choice
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0)
      size [set every repeat] = (1.3, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Choice2Gain
    TextComponent blank
      color [set every repeat] = $[-1.000,-1.000,-1.000]
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.01
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = I
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    ImageComponent ChoicePic2
      image [set every repeat] = $Choice2
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0)
      size [set every repeat] = (1.3, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent resp
      allowedKeys [set every repeat] = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent checkL1
      color [set every repeat] = $[1,1,1]
      image [set every repeat] = check2.png
      mask [set every repeat] = None
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0)
      size [set every repeat] = (2, 1)
      startVal [condition] = resp.keys == 'left'
      stopVal [duration (s)] = 1
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    ImageComponent checkR1
      color [set every repeat] = $[1,1,1]
      image [set every repeat] = check3.png
      mask [set every repeat] = None
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0)
      size [set every repeat] = (2, 1)
      startVal [condition] = resp.keys == 'right'
      stopVal [duration (s)] = 1
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    CodeComponent code_4
      Code Type = Py
      Begin Experiment:
        from PIL import Image
        from psychopy import visual, core
      Each Frame:
        checkL1.autoLog=False
        checkR1.autoLog=False


        if resp.keys == 'left':
            checkL1.autoDraw=True


        if resp.keys == 'right':
            checkR1.autoDraw=True


        if blank.status == FINISHED:
            checkR1.autoDraw=False
            checkL1.autoDraw=False
            continueRoutine=False
      End Routine:
        checkL1.autoLog=False
        checkR1.autoLog=False



        if resp.keys == 'left':
            checkL1.autoDraw=True


        if resp.keys =='right':
            checkR1.autoDraw=True


        if blank.status == FINISHED:
            checkR1.autoDraw=False
            checkL1.autoDraw=False
    CodeComponent GambleCount
      Code Type = Py
      Begin Experiment:
        nGamble=0
        adFollow=0
      End Routine:
        #trials.addData('nGamble', nGamble)
        if resp.keys == 'right':
            nGamble += 1


        if followAd == 'risk' and resp.keys == 'right':
            adFollow += 1
  Routine preBlock
    TextComponent chooseInst
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.04
      pos [set every repeat] = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = Please choose which person you would want to receive financial advice from, and then press enter.
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    TextComponent Ad1
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.04
      pos [set every repeat] = (-0.4, -0.05)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
          Advisor 1: (Left Arrow)








        Adelphi University MBA student,
        interning at Chase Bank
    TextComponent Ad2
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.04
      pos [set every repeat] = (0.4, -0.05)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Advisor 2: (Right arrow)








        Adelphi University
        undergraduate biology major
    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    ImageComponent Ad1pic
      image [set every repeat] = avatar_1.png
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (-.4, -0.06)
      size [set every repeat] = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent Ad2pic
      image = avatar_2.png
      pos = (.4, -0.06)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    CodeComponent circleCode
      Code Type = Py
      Begin Routine:
        border_right = visual.Circle(win,radius = 0.38, edges = 90,lineColor='green',lineColorSpace = 'rgb', fillColor = None, pos = (0.4, -0.09), opacity = 1, lineWidth = 5.0)
        border_left = visual.Circle(win,radius = 0.38, edges = 90,lineColor='green',lineColorSpace = 'rgb', fillColor = None, pos = (-0.4, -0.09), opacity = 1, lineWidth = 5.0)
      Each Frame:
        if key_resp_3.keys == 'left':
            border_left.autoDraw=True

        if key_resp_3.keys =='right':
            border_right.autoDraw=True

        if chooseInst.status == FINISHED:
            border_right.autoDraw = False
            border_left.autoDraw = False
      End Routine:
        if chooseInst.status == FINISHED:
            border_right.autoDraw = False
            border_left.autoDraw = False
    KeyboardComponent enter
      allowedKeys [set every repeat] = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent readAdvisors
      Code Type = Py
      Begin Experiment:
        import numpy.random

        from numpy.random import choice

        import pandas as pd

        import xlrd

        book = xlrd.open_workbook('Book1.xlsx')
        sheet = book.sheet_by_index(0)
      Begin Routine:
        cond = pd.read_excel('Book1.xlsx')
      End Routine:
        if key_resp_3.keys == 'left':
            text = 'Advisor 1 says:'
            text2 = 'Advisor 1'

        if key_resp_3.keys == 'right':
            text = 'Advisor 2 says:'
            text2 = 'Advisor 2'
  Routine askAd
    KeyboardComponent response
      allowedKeys [set every repeat] = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    TextComponent yesNo
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.09
      pos [set every repeat] = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = Y=1                 N=2
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    TextComponent ask
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.06
      pos [set every repeat] = (0, 0.11)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text [set every repeat]:
        Would you like to hear advice from your financial advisor?
  Routine ISI
    TextComponent iSi
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine inst
    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the study!

        On the following page you will be instructed to choose an advisor.

        Press the space bar when you are ready to proceed.
    KeyboardComponent space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Receive_money
    ImageComponent receiveMoneyPicture
      image [set every repeat] = $Amount
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, -0.05)
      size [set every repeat] = (1.5, 1.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent ISI2
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.08
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = +
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  Routine Repeat20
    CodeComponent rep20
      Code Type = Py
  Routine getAd
    CodeComponent condAdv
      Code Type = Py
      Begin Experiment:
        gamAdRisk=0
      Begin Routine:
        followAd = []


        if response.keys == '1':
            continueRoutine = True
        if response.keys == '2':
            continueRoutine = False
        if response.keys == None:
            continueRoutine = False
      Each Frame:
        if response.keys == '1':
            continueRoutine = True
        if response.keys == '2':
            continueRoutine = False
        if response.keys == None:
            continueRoutine = False
      End Routine:
        #gambleAdvice = int(GambleAdviceNum)


        if response.keys == '1':
            continueRoutine = True
        if response.keys == '2':
            continueRoutine = False
        if response.keys == None:
            continueRoutine = False


        if continueRoutine == True and GambleAdviceType == 'risk':
            gamAdRisk += 1
            followAd = 'risk'

        print(gamAdRisk)
    TextComponent getAdv
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.08
      pos [set every repeat] = (0, 0)
      startVal [condition] = continueRoutine == True
      stopVal [duration (s)] = 2
      text [set every repeat] = $text + $AdviceVar1
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    TextComponent textForCode
      color [set every repeat] = $[-1.000,-1.000,-1.000]
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.01
      pos [set every repeat] = (-0.9, 0)
      startVal [condition] = continueRoutine == True
      stopVal [duration (s)] = 1
      text [set every repeat] = $GambleAdviceType
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  Routine Ending
    TextComponent Ending_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = You have reached the end of the experiment. Thank you for participating :)
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  Routine welcome
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the gambling advice task. Here you will make a series of choices between accepting a monetary gamble or accepting a guaranteed monetary outcome.

        On each trial, you can choose whether you want to recieve advice from your chosen advisor.

        Press the spacebar to move on to the practice trials.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine endprac
    TextComponent EndPrac
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have reached the end of the practice round.

        If you have any questions, please let the experimenter know now.

        Otherwise, please press the spacebar to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine inst
  Routine preBlock
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Choice', 'Pictures/IA50_G10.bmp'), ('Choice2', 'Pictures/IA50_G10.bmp'), ('Amount', 'Pictures/IA50.bmp'), ('AdviceVar1', '\n\n"Go with the safe option here!"'), ('GambleAdviceNum', 0), ('GambleAdviceType', 'safe')]),
      OrderedDict([('Choice', 'Pictures/IA50_G20.bmp'), ('Choice2', 'Pictures/IA50_G20.bmp'), ('Amount', 'Pictures/IA50.bmp'), ('AdviceVar1', '\n\n"Let\'s venture and take a risk!"'), ('GambleAdviceNum', 1), ('GambleAdviceType', 'risk')]),
      OrderedDict([('Choice', 'Pictures/IA50_G30.bmp'), ('Choice2', 'Pictures/IA50_G30.bmp'), ('Amount', 'Pictures/IA50.bmp'), ('AdviceVar1', '\n\n"I think you should gamble."'), ('GambleAdviceNum', 1), ('GambleAdviceType', 'risk')]),
      OrderedDict([('Choice', 'Pictures/IA50_G40.bmp'), ('Choice2', 'Pictures/IA50_G40.bmp'), ('Amount', 'Pictures/IA50.bmp'), ('AdviceVar1', '\n\n"It would probably be best to play it safe."'), ('GambleAdviceNum', 0), ('GambleAdviceType', 'safe')]),
      OrderedDict([('Choice', 'Pictures/IA100_G20.bmp'), ('Choice2', 'Pictures/IA100_G20.bmp'), ('Amount', 'Pictures/IA100.bmp'), ('AdviceVar1', '\n\n"Go ahead and gamble!"'), ('GambleAdviceNum', 1), ('GambleAdviceType', 'risk')])]
    Routine ISI
    Routine Receive_money
    Routine trial
    Routine askAd
    Routine getAd
    Routine Choice2Gain
  LoopTerminator practice
  Routine endprac
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine preBlock
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $choice(40, size=20, replace=False)
      conditionsFile = Book1.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('Choice', 'Pictures/IA50_G10.bmp'), ('Choice2', 'Pictures/IA50_G10.bmp'), ('Amount', 'Pictures/IA50.bmp'), ('AdviceVar1', '\n\n"Go with the safe option here!"'), ('GambleAdviceNum', 0), ('GambleAdviceType', 'safe')]),
        OrderedDict([('Choice', 'Pictures/IA50_G20.bmp'), ('Choice2', 'Pictures/IA50_G20.bmp'), ('Amount', 'Pictures/IA50.bmp'), ('AdviceVar1', '\n\n"Let\'s venture and take a risk!"'), ('GambleAdviceNum', 1), ('GambleAdviceType', 'risk')]),
        OrderedDict([('Choice', 'Pictures/IA50_G30.bmp'), ('Choice2', 'Pictures/IA50_G30.bmp'), ('Amount', 'Pictures/IA50.bmp'), ('AdviceVar1', '\n\n"I think you should gamble."'), ('GambleAdviceNum', 1), ('GambleAdviceType', 'risk')]),
        OrderedDict([('Choice', 'Pictures/IA50_G40.bmp'), ('Choice2', 'Pictures/IA50_G40.bmp'), ('Amount', 'Pictures/IA50.bmp'), ('AdviceVar1', '\n\n"It would probably be best to play it safe."'), ('GambleAdviceNum', 0), ('GambleAdviceType', 'safe')]),
        OrderedDict([('Choice', 'Pictures/IA100_G20.bmp'), ('Choice2', 'Pictures/IA100_G20.bmp'), ('Amount', 'Pictures/IA100.bmp'), ('AdviceVar1', '\n\n"Go ahead and gamble!"'), ('GambleAdviceNum', 1), ('GambleAdviceType', 'risk')]),
        OrderedDict([('Choice', 'Pictures/IA100_G40.bmp'), ('Choice2', 'Pictures/IA100_G40.bmp'), ('Amount', 'Pictures/IA100.bmp'), ('AdviceVar1', '\n\n"Try your luck and gamble!"'), ('GambleAdviceNum', 1), ('GambleAdviceType', 'risk')])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
      Routine ISI
      Routine Receive_money
      Routine trial
      Routine askAd
      Routine getAd
      Routine Choice2Gain
    LoopTerminator trials
    Routine Feedback
  LoopTerminator trials_2
  Routine Ending
