PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Experiment info = {'participant': '', 'session': '001'}
  Units = height
  Window size (pixels) = [1536, 864]
  Full-screen window = True
  expName = Test
  Screen = 1
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $Gain
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      size [set every repeat] = (1.3, 0.9)
      opacity [set every repeat] = 1
      stopVal [duration (s)] = 4
      ori [set every repeat] = 0
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  Routine code_2
    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        nRepsblock1=0
        nRepsblock2=0
      Begin Routine:
        if selectBlock==1:
         nRepsblock1=1
         nRepsblock2=0
        elif selectBlock==2:
         nRepsblock1=0
         nRepsblock2=1
  Routine Choice2Gain
    TextComponent text1
      color [set every repeat] = $[-1.000,-1.000,-1.000]
      text [set every repeat] = I
      stopVal [duration (s)] = 4
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.01
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    ImageComponent image_5
      image [set every repeat] = $Gain1
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      size [set every repeat] = (1.3, 0.9)
      opacity [set every repeat] = 1
      stopVal [duration (s)] = 4
      ori [set every repeat] = 0
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    KeyboardComponent resp
      stopVal [duration (s)] = 4
      forceEndRoutine = False
      allowedKeys [set every repeat] = 'left','right'
      startVal [time (s)] = 0.0
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    ImageComponent checkL1
      opacity [set every repeat] = 1
      color [set every repeat] = $[1,1,1]
      stopVal [duration (s)] = 2
      mask [set every repeat] = None
      pos [set every repeat] = (0, 0)
      ori [set every repeat] = 0
      startVal [condition] = resp.keys == 'left'
      image [set every repeat] = check2.png
      size [set every repeat] = (2, 1)
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    ImageComponent checkR1
      opacity [set every repeat] = 1
      color [set every repeat] = $[1,1,1]
      stopVal [duration (s)] = 2
      mask [set every repeat] = None
      pos [set every repeat] = (0, 0)
      ori [set every repeat] = 0
      startVal [condition] = resp.keys == 'right'
      image [set every repeat] = check3.png
      size [set every repeat] = (2, 1)
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    CodeComponent code_4
      Code Type = Py
      Begin Experiment:
        from PIL import Image
        from psychopy import visual, core
      End Routine:
        checkL1.autoLog=False
        checkR1.autoLog=False



        if resp.keys == 'left':
            checkL1.autoDraw=True
        #elif resp.keys == 'right':
         #   checkR1.autoDraw=False

        if resp.keys =='right':
            checkR1.autoDraw=True

        if text1.status == FINISHED:
            checkR1.autoDraw=False
            checkL1.autoDraw=False
            #win.flip()
        #elif resp.keys == 'left':
         #   checkL1.autoDraw=False


        #clock = core.Clock()
        #while clock.getTime() < 2.0:
         #   if 0.5 <= clock.getTime() < 1.0:
          #      if checkL1.autoDraw==True:
           #         checkL1.setPhase (0.1, '+')
            #    elif checkR1.autoDraw==True:
             #       checkR1.setPhase(0.1, '+')
            #win.flip()
      Each Frame:
        checkL1.autoLog=False
        checkR1.autoLog=False


        if resp.keys == 'left':
            checkL1.autoDraw=True
        #elif resp.keys == 'right':
         #   checkR1.autoDraw=False

        if resp.keys == 'right':
            checkR1.autoDraw=True

        if text1.status == FINISHED:
            checkR1.autoDraw=False
            checkL1.autoDraw=False
            continueRoutine=False
            #win.flip()


            #elif resp.keys == 'left':
         #   checkL1.autoDraw=False

        #clock = core.Clock()
        #while clock.getTime() < 2.0:
        #    if 0.5 <= clock.getTime() < 1.0:
         #       if checkL1.autoDraw==True:
          #          checkL1.setPhase(0.1, '+')
           #     elif checkR1.autoDraw==True:
            #        checkR1.setPhase(0.1, '+')
            #win.flip()
  Routine loseTrial
    ImageComponent image_2
      image [set every repeat] = $Loss
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      size [set every repeat] = (1.3, 0.9)
      opacity [set every repeat] = 1
      stopVal [duration (s)] = 4
      ori [set every repeat] = 0
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  Routine ISI
    TextComponent text_5
      color [set every repeat] = white
      text [set every repeat] = +
      stopVal [duration (s)] = 3
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.08
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    TextComponent text_7
      color [set every repeat] = white
      text [set every repeat] = $Amount
      stopVal [duration (s)] = 2
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 3
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.1
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    TextComponent isi2
      color [set every repeat] = white
      text [set every repeat] = +
      stopVal [duration (s)] = 2
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 5
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.08
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  Routine askAd
    TextComponent text_3
      pos = (0, -0.2)
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      text = Y                 N
      stopVal [condition] = Advice.status==STARTED
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    TextComponent ask
      pos = (0, 0.11)
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Would you like to hear advice from your financial advisor?
      stopVal [condition] = Advice.status==STARTED
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    KeyboardComponent response
      stopVal [duration (s)] = 4
      forceEndRoutine = False
      allowedKeys = 'y','n'
      startVal [time (s)] = 0
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    CodeComponent code
      Code Type = Py
      End Routine:
        if response.keys == 'y':
            continueRoutine = True
        elif response.keys == 'n':
            continueRoutine = False
      Each Frame:
        if response.keys == 'y':
            continueRoutine = True
        elif response.keys == 'n':
            continueRoutine = False
    TextComponent Advice
      color [set every repeat] = white
      pos [set every repeat] = (0, 0)
      letterHeight [set every repeat] = 0.08
      startVal [condition] = response.keys=='y'
      font [set every repeat] = Arial
      text [set every repeat] = $AdviceVar
      stopVal [duration (s)] = 3
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  Routine preBlock
    TextComponent chooseInst
      text = Please choose which person you would want to receive advice from, and then press enter.
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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    TextComponent text_2
      pos = (-0.4, -0.05)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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      text:
          Advisor X: (Left Arrow)








        Adelphi University MBA student,
         interning at Chase Bank
    TextComponent text_4
      pos = (0.4, -0.05)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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      text:
        Advisor Y: (Right arrow)








        Adelphi University
        undergraduate biology major
    KeyboardComponent key_resp_3
      forceEndRoutine = False
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.0
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    ImageComponent image_6
      pos = (-.4, -0.06)
      startVal [time (s)] = 0.0
      image = avatar_1.png
      size = (0.3, 0.3)
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    ImageComponent image_7
      pos = (.4, -0.06)
      startVal [time (s)] = 0.0
      image = avatar_2.png
      size = (0.3, 0.3)
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    CodeComponent code_6
      Begin Routine:
        border_right = visual.Circle(win,radius = 0.38, edges = 90,lineColor='green',lineColorSpace = 'rgb', fillColor = None, pos = (0.4, -0.09), opacity = 1, lineWidth = 5.0)
        border_left = visual.Circle(win,radius = 0.38, edges = 90,lineColor='green',lineColorSpace = 'rgb', fillColor = None, pos = (-0.4, -0.09), opacity = 1, lineWidth = 5.0)
      End Routine:
        if chooseInst.status == FINISHED:
            border_right.autoDraw = False
            border_left.autoDraw = False
      Each Frame:
        if key_resp_3.keys == 'left':
            border_left.autoDraw=True

        if key_resp_3.keys =='right':
            border_right.autoDraw=True

        if chooseInst.status == FINISHED:
            border_right.autoDraw = False
            border_left.autoDraw = False
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
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  Routine inst
    TextComponent instructions
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Welcome to the experiment.


        In the following page you will be instructed to choose an advisor.

        Press the space bar when you are ready to proceed.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine pi_2
    ImageComponent image_4
      image = 20.png
      pos = (0.32, 0.06)
      startVal [time (s)] = 0.0
      size = (1.39, 0.73)
      stopVal [duration (s)] = 3
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    PolygonComponent polygon
      pos = (-0.15, 0)
      shape = line
      startVal [time (s)] = 0.0
      size = (15, 0)
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 3
      ori = 90
      lineWidth = 5
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    TextComponent text
      pos = (-0.45, -0.02)
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        KEEP
         \$80
    TextComponent gamble
      pos = (0.32, 0.05)
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text = GAMBLE
      stopVal [duration (s)] = 3
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    PolygonComponent greenRec
      pos = (0.47, -0.37)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.08, 0.04)
      fillColor = $[-1.000,0.184,-1.000]
      stopVal [duration (s)] = 3
      lineColor = $[-1.000,-1.000,-1.000]
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    PolygonComponent redRec
      pos = (0.47, -0.42)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.08, 0.04)
      fillColor = $[1.000,-1.000,-1.000]
      stopVal [duration (s)] = 3
      lineColor = $[-1.000,-1.000,-1.000]
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    TextComponent keepAll
      pos = (0.6, -0.37)
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text = keep all
      stopVal [duration (s)] = 3
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    TextComponent loseAll
      pos = (0.6, -0.41)
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text = lose all
      stopVal [duration (s)] = 3
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  Routine Choice2Loss
    TextComponent text2
      color [set every repeat] = $[-1.000,-1.000,-1.000]
      text [set every repeat] = I
      stopVal [duration (s)] = 4
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.01
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    ImageComponent image_3
      image [set every repeat] = $Loss1
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      size [set every repeat] = (1.3, 0.9)
      opacity [set every repeat] = 1
      stopVal [duration (s)] = 4
      ori [set every repeat] = 0
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    KeyboardComponent resp2
      stopVal [duration (s)] = 4
      forceEndRoutine = False
      allowedKeys [set every repeat] = 'left','right'
      startVal [time (s)] = 0.0
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    ImageComponent checkR
      image [set every repeat] = check3.png
      pos [set every repeat] = (0, 0)
      startVal [condition] = resp2.keys == 'right'
      size [set every repeat] = (2, 1)
      opacity [set every repeat] = 1
      stopVal [duration (s)] = 3
      ori [set every repeat] = 0
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    ImageComponent checkL
      image [set every repeat] = check2.png
      pos [set every repeat] = (0, 0)
      startVal [condition] = resp2.keys == 'left'
      size [set every repeat] = (2, 1)
      opacity [set every repeat] = 1
      stopVal [duration (s)] = 3
      ori [set every repeat] = 0
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    CodeComponent code_5
      Code Type = Py
      Begin Experiment:
        #checkL = visual.ImageStim(win=win, pos=(-0.19, 0), size= (0.25, 0.25) )
        #checkL.setImage('check.png')
        #checkR = visual.ImageStim(win=win, pos=(0.19, 0), size= (0.25, 0.25) )
        #checkR.setImage('check.png')
      End Routine:
        checkL.autoLog=False
        checkR.autoLog=False



        if resp2.keys == 'left':
            checkL.autoDraw=True
        #elif resp.keys == 'right':
         #   checkR1.autoDraw=False

        if resp2.keys =='right':
            checkR.autoDraw=True

        if text2.status == FINISHED:
            checkR.autoDraw=False
            checkL.autoDraw=False
      Each Frame:
        checkL.autoLog=False
        checkR.autoLog=False


        if resp2.keys == 'left':
            checkL.autoDraw=True
        #elif resp.keys == 'right':
         #   checkR1.autoDraw=False

        if resp2.keys == 'right':
            checkR.autoDraw=True

        if text2.status == FINISHED:
            checkR.autoDraw=False
            checkL.autoDraw=False
            continueRoutine=False
Flow
  Routine inst
  Routine preBlock
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = Conditions.csv
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'Loss': u'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_L10.bmp', 'Gain1': u'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_G10.bmp', 'Amount': u'RECEIVE $25', 'Gain': u'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_G10.bmp', 'selectBlock': 1, 'Loss1': u'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_L10.bmp', 'AdviceVar': u'Advisor 1 says:\n\n"Go with the safe option here!"'},
      {'Loss': u'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_L20.bmp', 'Gain1': u'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_G20.bmp', 'Amount': u'RECEIVE $50', 'Gain': u'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_G20.bmp', 'selectBlock': 2, 'Loss1': u'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_L20.bmp', 'AdviceVar': u'Advisor 1 says:\n\n"Let\'s take a risk!"'},
      {'Loss': u'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_L30.bmp', 'Gain1': u'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_G30.bmp', 'Amount': u'RECEIVE $75', 'Gain': u'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_G30.bmp', 'selectBlock': 1, 'Loss1': u'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_L30.bmp', 'AdviceVar': u'Advisor 1 says:\n\n"I think you should gamble."'},
      {'Loss': u'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_L40.bmp', 'Gain1': u'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_G40.bmp', 'Amount': u'RECEIVE $100', 'Gain': u'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_G40.bmp', 'selectBlock': 2, 'Loss1': u'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_L40.bmp', 'AdviceVar': u'Advisor 1 says:\n\n"It would probably be best to play it safe."'}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
    Routine code_2
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = Conditions.csv
      loopType = fullRandom
      nReps = nRepsblock1
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      conditions:
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      Routine ISI
      Routine trial
      Routine askAd
      Routine Choice2Gain
    LoopTerminator trials
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = Conditions.csv
      loopType = fullRandom
      nReps = nRepsblock2
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      conditions:
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      Routine ISI
      Routine loseTrial
      Routine askAd
      Routine Choice2Loss
    LoopTerminator trials_2
  LoopTerminator trials_3
