PsychoPy2experiment version="3.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1368, 912]
  color = $[-1,-1,-1]
  expName = experiment
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment.
        In the following page you will
        be instructed to choose an
        advisor. Press the space bar
        when you are ready to proceed.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine preblock
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Please choose which person you would want to recieve advice from and press then press enter
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    TextComponent text_3
      letterHeight = 0.04
      pos = (-0.4, -0.05)
      startVal [time (s)] = 0.0
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      text:
          Advisor X: (Left Arrow)








        Adelphi University MBA student,
         interning at Chase Bank
    TextComponent text_4
      letterHeight = 0.04
      pos = (0.4, -0.05)
      startVal [time (s)] = 0.0
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      text:
        Advisor Y: (Right arrow)








        Adelphi Univertisity
        undergraduate biology major
    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        border_right = visual.Circle(win,radius = 0.38, edges = 90,lineColor='green',lineColorSpace = 'rgb', fillColor = None, pos = (0.4, -0.09), opacity = 1, lineWidth = 5.0)
        border_left = visual.Circle(win,radius = 0.38, edges = 90,lineColor='green',lineColorSpace = 'rgb', fillColor = None, pos = (-0.4, -0.09), opacity = 1, lineWidth = 5.0)
      Each Frame:
        if key_resp_2.keys == 'left':
            border_left.autoDraw=True

        if key_resp_2.keys =='right':
            border_right.autoDraw=True

        if text_3.status == FINISHED:
            border_left.autoDraw = False

        if text_4.status==FINISHED:
            border_right.autoDraw = False
    KeyboardComponent key_resp_3
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image
      image = C:\Users\ns582\Downloads\PsychoPy\avatar_1.png
      pos = (-.4, -0.06)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image = C:\Users\ns582\Downloads\PsychoPy\avatar_2.png
      pos = (0.4, -0.06)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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  Routine ISI
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.5
      text = Recieve 100
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    ImageComponent image_3
      image [set every repeat] = $Gain
      size = (0.5, 0.5)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 4
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Flow
  Routine trial
  Routine preblock
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ConditionsGain.csv
    loopType = random
    nReps = 5
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    Routine ISI
  LoopTerminator trials
